OpenViBE-Scenario(FormatVersion=1, Creator=OpenViBE Designer, CreatorVersion=2.0.1)
Comment
  <--Double click to BCI2000 reader and select the BCI2000 dat file
Comment
  <--The scanario considers only StimulationCode signal (0-for baseline, 1-for trial)
  WARNING: The scenario will work only with binary StimulationCodes
Comment
  Python script that converts type "Signal" to the "Stimulation" type with markers:

  OVTK_GDF_Start_Of_Trial for 1
  OVTK_GDF_End_Of_Trial for 0

  Please make sure that the script BCI2000_stimulation_generator.py is loaded

BCI2000 File Reader => #0
  File name = Y:/Documents/BCI_2000_tmp_data/ELISA C. giorno 1/ELISAS001R03.dat
  Samples per buffer = 32
#0.State -> Channel Selector "StimulusCode"
  Channel List = StimulusCode
  Action = Select
  Channel Matching Method = Smart
-> StimulusConverter => #2
  Clock frequency (Hz) = 2
  Script = ${Player_ScenarioDirectory}/BCI2000_stimulation_generator.py
Input stream 1=#0.Signal, Input stream 2=#2 -> Identity => #3
Signal=#3.Output stream 1, Stimulation=#3.Output stream 2 -> GDF file writer
  Filename = ${Player_ScenarioDirectory}/record-[$core{date}-$core{time}].gdf
Data=#3.Output stream 1, Stimulations=#3.Output stream 2 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
